PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = calibration
  keyboardBackend = ioHub
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Routines
  Routine calibration
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    PolygonComponent circle_cal_1
      fillColor = white
      pos = (-.711, 0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_cal_2
      fillColor = white
      pos = (0.711, 0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 1.0
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    PolygonComponent circle_cal_3
      fillColor = white
      pos = (-0.711, -0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 2.2
      stopVal [duration (s)] = 1
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    PolygonComponent circle_cal_4
      fillColor = white
      pos = (0.711, -0.4)
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 1.0
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  Routine fix
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine feedback
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    PolygonComponent point_of_interest
      fillColor = white
      shape = circle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Observa los distintos puntos en la pantalla para calibrar el eyetracker.

        [Presiona la barra espaciadora para continuar]
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine fix
  Routine calibration
  Routine feedback
